PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  expName = untitled
  Screen = 1
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Routines
  Routine instruction
    ImageComponent instruction_text
      startVal [time (s)] = 0.0
      image = Images\Instruction.png
      size = (1.6,1)
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    KeyboardComponent instruction_end
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent preparation
  Routine finish
  Routine main_event
    CodeComponent code
      End Routine:
        if 'e' in problem_control.keys:
            lagging.finished = True
      Each Frame:
        if 'space' in problem_control.keys:
            this_impact.opacity = 1
    ImageComponent this_problem
      startVal [time (s)] = 0.0
      image [set every repeat] = $problem
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    ImageComponent impacts
      opacity [set every repeat] = 1
      color = red
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      image [set every repeat] = $impact
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    KeyboardComponent problem_control
      forceEndRoutine = True
      allowedKeys = 'space', 'e'
      startVal [time (s)] = 1.0
      store = all keys
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  Routine counting
Flow
  Routine instruction
  Routine counting
  LoopInitiator problems loopType="TrialHandler"
    conditionsFile = conditions\problems.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'impact': u'Images\\Dec_hint.png', 'problem': u'Images\\Decomposition_for_expl.png'},
      {'impact': u'Images\\Rel_hint.png', 'problem': u'Images\\Relaxation_for_expl.png'}]
    LoopInitiator lagging loopType="TrialHandler"
      loopType = sequential
      nReps = 10
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      Routine main_event
    LoopTerminator lagging
  LoopTerminator problems
  Routine finish
